PsychoPy2experiment version="2024.1.1"
Settings
  Experiment info = {'participant': 'f"{randint(0, 45):02.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = norm
  Use version = 2023.1.0
  Window size (pixels) = [1920, 1080]
  backgroundFit = scale-down
  color = $[0,0,0.3]
  expName = Exp_attention
  eyetracker = Tobii Technology
  keyboardBackend = ioHub
  runMode = 0
  tbModel = Tobii Pro Spark
  tbSampleRate = 60
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Routines
  Routine blank
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    TextComponent TextB
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        bkgcolor=[0,0,0.3]
        win.setColor(bkgcolor)
  Routine trial
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    PolygonComponent Color1
      fillColor [set every repeat] = $colors[0]
      pos [set every repeat] = (0, locations[0][1])
      shape = rectangle
      size = (1.8, 0.125)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent Color2
      fillColor [set every repeat] = $colors[1]
      pos [set every repeat] = (0, locations[1][1])
      shape = rectangle
      size = (1.8, 0.125)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent Color3
      fillColor [set every repeat] = $colors[2]
      pos [set every repeat] = (0, locations[2][1])
      shape = rectangle
      size = (1.8, 0.125)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent Color4
      fillColor [set every repeat] = $colors[3]
      pos [set every repeat] = (0, locations[3][1])
      shape = rectangle
      size = (1.8, 0.125)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent Bus_label
      image = Images_Attention/response_Bus.png
      pos = (xcoord2, ycoord1)
      size = (xsizela , ysizela)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent Metro_label
      image = Images_Attention/response_Metro.png
      pos = (xcoord3, ycoord1)
      size = (xsizela , ysizela)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent RH_label
      image = Images_Attention/response_RH.png
      pos = (xcoord4, ycoord1)
      size = (xsizela , ysizela)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent None_2
      image = Images_Attention/response_None.png
      pos = (1.5, 1.5)
      size = (xsizela , ysizela)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent Cost_bus
      bold = False
      borderColor = white
      color = gray
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos [set every repeat] = (xcoord2, locations[0][1])
      size = (xsizele , ysizele)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent Cost_metro
      bold = False
      borderColor = white
      color = gray
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos [set every repeat] = (xcoord3, locations[0][1])
      size = (xsizele , ysizele)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent Cost_RH
      bold = False
      borderColor = white
      color = gray
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos [set every repeat] = (xcoord4, locations[0][1])
      size = (xsizele , ysizele)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent Time_bus
      bold = False
      borderColor = white
      color = gray
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos [set every repeat] = (xcoord2, locations[1][1])
      size = (xsizele , ysizele)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent Time_metro
      bold = False
      borderColor = white
      color = gray
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos [set every repeat] = (xcoord3, locations[1][1])
      size = (xsizele , ysizele)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent Time_RH
      bold = False
      borderColor = white
      color = gray
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos [set every repeat] = (xcoord4, locations[1][1])
      size = (xsizele , ysizele)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent Comfort_bus
      bold = False
      borderColor = white
      color = gray
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos [set every repeat] = (xcoord2, locations[2][1])
      size = (xsizele , ysizele)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent Comfort_metro
      bold = False
      borderColor = white
      color = gray
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos [set every repeat] = (xcoord3, locations[2][1])
      size = (xsizele , ysizele)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent Comfort_RH
      bold = False
      borderColor = white
      color = gray
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos [set every repeat] = (xcoord4, locations[2][1])
      size = (xsizele , ysizele)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent CO2_bus
      bold = False
      borderColor = white
      color = gray
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos [set every repeat] = (xcoord2, locations[3][1])
      size = (xsizele , ysizele)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent CO2_metro
      bold = False
      borderColor = white
      color = gray
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos [set every repeat] = (xcoord3, locations[3][1])
      size = (xsizele , ysizele)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent CO2_RH
      bold = False
      borderColor = white
      color = gray
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos [set every repeat] = (xcoord4, locations[3][1])
      size = (xsizele , ysizele)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent Cost_label
      bold = False
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (locations[0][0], locations[0][1])
      size = (xsizele , ysizele)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Cost
        (US)
    TextboxComponent Time_label
      bold = False
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (locations[1][0], locations[1][1])
      size = (xsizele , ysizele)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Time
        (min)
    TextboxComponent Comfort_label
      bold = False
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (locations[2][0], locations[2][1])
      size = (xsizele , ysizele)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Comfort
        (0 to 5 stars)
    TextboxComponent CO2_label
      bold = False
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (locations[3][0], locations[3][1])
      size = (xsizele , ysizele)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Pollution
        (trees)
    MouseComponent mouse
      clickable = Bus_label,Metro_label,RH_label,None_2
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        nLoop=1
        phase=1
        Trials1=15
        Trials2=15
        Trials=Trials1+Trials2
        #pid=int(expInfo['participant'])

        #locations params
        distance_sepx1 = 0.25
        distance_sepy = 0.3
        distance_sepx2 = (distance_sepx1)*2 + distance_sepx1
        xcoord1 = - (distance_sepx2)
        xcoord2 = - (distance_sepx1)
        xcoord3 = (distance_sepx1)
        xcoord4 = (distance_sepx2)
        #size params
        xsizele = 0.2
        ysizele = 0.1
        xsizela = 0.25
        ysizela = 0.1
        xETreg = 0.3
        yETreg = 0.2

        ycoord1 = 2*(distance_sepy)
        ycoord2 = distance_sepy
        ycoord3 = 0
        ycoord4 = - distance_sepy
        ycoord5 = - 2*(distance_sepy)

        loc1 = [xcoord1, ycoord2];
        loc2 = [xcoord1, ycoord3];
        loc3 = [xcoord1, (ycoord4)];
        loc4 = [xcoord1, (ycoord5)];

        #locations labels - previous ones
        #loc1 = [ -0.67, 0.33 ]
        #loc2 = [ -0.67, 0 ]
        #loc3 = [ -0.67, -0.33 ]
        #loc4 = [ -0.67, -0.67 ]
        locations = [loc1, loc2, loc3, loc4]
        shuffle(locations)

        #colors
        color1 = [0.8216, 0.7412, 0.2039]
        color2 = [0.6471, 0.4118, 0.0980]
        color3 = [0.4824, 0.4353, -0.1608] #-0.16
        color4 = [1.000, 0.4112, 0.3569]
        colors = [color1, color2, color3, color4]
        shuffle(colors)

        #EYETRACKER
        from psychopy.iohub import launchHubServer
        from psychopy.core import getTime, wait
      Begin Experiment:
        print('Exp starting')
        pid = int(expInfo['participant']) #id participante
        useRows = str(Trials*(pid-1))+':'+str(Trials*(pid-1)+(Trials)) #trials

        #------------------NEWET------------------------
        from psychopy import visual, event, core
        import psychopy.visual
        import psychopy.event
        import tobii_research as tr
        found_eyetrackers = tr.find_all_eyetrackers()
        my_eyetracker = found_eyetrackers[0]
        print("Address: " + my_eyetracker.address)
        print("Model: " + my_eyetracker.model)
        #print("Name (It's OK if this is empty): " + my_eyetracker.device_name)
        #print("Serial number: " + my_eyetracker.serial_number)
        #-----------------------------------------------
      Begin Routine:
        print('Routine starting ',nLoop)
        bkgcolor=[0,0,0.3]
        win.setColor(bkgcolor)
        clicked_things = []
        clickables = [Bus_label, Metro_label, RH_label]
        waiting = False
        ETRECORD_FR = []
        LEFTPUPIL_FR = []
        RIGHTPUPIL_FR = []
        TIMEGAZE = []
        MOUSEGAZE = []
        StartTimeRoutine = t

        #------------------NEWET------------------------
        # This will be called every time there is new gaze data
        def gaze_data_callback(gaze_data):
             #Extract the data we are interested in
            tg = gaze_data.system_time_stamp
            lp = gaze_data.left_eye.pupil.diameter
            rp = gaze_data.right_eye.pupil.diameter
            # Add gaze data to the buffer
            LEFTPUPIL_FR.append(lp)
            RIGHTPUPIL_FR.append(rp)
            TIMEGAZE.append(tg)
        # Start the callback function-----------
        my_eyetracker.subscribe_to(tr.EYETRACKER_GAZE_DATA, gaze_data_callback)
        #-----------------------------------------------

        Cost_bus.text=Bus_cost
        #Cost_Bus_Shown = Bus_cost
        Cost_metro.text=metro_cost
        #Cost_metro_Shown = metro_cost
        Cost_RH.text=RH_cost
        #Cost_RH_Shown = RH_cost

        ## attributes bus-----------------------------
        Time_bus.text=Bus_travel_time#[nLoop]
        Comfort_bus.text=Bus_Comfort#[nLoop]
        CO2_bus.text=Bus_CO2#[nLoop]

        ## attributes metro
        Time_metro.text=metro_travel_time#[nLoop]
        Comfort_metro.text=metro_Comfort#[nLoop]
        CO2_metro.text=metro_CO2#[nLoop]

        ##atributes RH
        Time_RH.text=RH_travel_time#[nLoop]
        Comfort_RH.text=RH_Comfort#[nLoop]
        CO2_RH.text=RH_CO2#[nLoop]
      Each Frame:
        clickedN = 0
        buttonsPressed = mouse.getPressed()
        # check if the mouse is pressed in any of the boxes
        for clickable in clickables:
            if mouse.isPressedIn(clickable):
                clicked_things.append(clickable.name)

        for clickable in clickables:
            if clickable.name in clicked_things:
                clickedN += 1
                choice=clickable.name
            if clickedN == 1 and not waiting:
                waiting = True
                startTime=t



        if clickedN == 1 and waiting:
            if t > startTime + 1:
                continueRoutine = False
        elif buttonsPressed[2]:
            choice = 'None'
            clicked_things.append(clickable.name)
            continueRoutine = False


        #EyeGaze
        ETRECORD_FR.append(etRecord.pos)
        MOUSEGAZE.append([mouse.getPos()[0],mouse.getPos()[1]])
      End Experiment:
        #intento no borrar eyetracker
        #my_eyetracker.subscribe_to(tr.EYETRACKER_GAZE_DATA, gaze_data_callback)
        #Test.finished= True
      End Routine:
        print('Routine ending ',nLoop)
        thisExp.addData('Choice', choice)
        thisExp.addData('Trial', nLoop)
        if nLoop>=Trials1:
            phase=2
        #trial duration
        thisExp.addData('TrialDuration', t - StartTimeRoutine )

        #stop recording
        my_eyetracker.unsubscribe_from(tr.EYETRACKER_GAZE_DATA, gaze_data_callback)

        #Cost shown
        #thisExp.addData('Bus_cost_Shown', Cost_Bus_Shown )
        #thisExp.addData('Metro_cost_Shown', Cost_metro_Shown )
        #thisExp.addData('RH_cost_Shown', Cost_RH_Shown )

        #eyetracker data
        thisExp.addData('ETRECORD_FR', ETRECORD_FR )
        thisExp.addData('LEFTPUPIL_FR', LEFTPUPIL_FR )
        thisExp.addData('RIGHTPUPIL_FR', RIGHTPUPIL_FR )
        thisExp.addData('TIME_GAZE', TIMEGAZE )
        thisExp.addData('MOUSE_GAZE', MOUSEGAZE )

        #sizedata
        thisExp.addData('attsize', (xsizele , ysizele) )
        thisExp.addData('prodsize', (xsizela , ysizela) )
        thisExp.addData('regETsize', (xETreg, yETreg) )

        #locations labels choices
        thisExp.addData('Loc_Bus_label', ( xcoord2 , ycoord1) )
        thisExp.addData('Loc_Metro_label', ( xcoord3 , ycoord1) )
        thisExp.addData('Loc_RH_label', ( xcoord4 , ycoord1) )
        #thisExp.addData('Loc_None_label', (0.67 , ycoord1) )

        #locations labels attributes
        thisExp.addData('Loc_Cost_label', (locations[0][0], locations[0][1]) )
        thisExp.addData('Loc_Travel_label', (locations[1][0], locations[1][1]) )
        thisExp.addData('Loc_Comfort_label', (locations[2][0], locations[2][1]) )
        thisExp.addData('Loc_CO2_label', (locations[3][0], locations[3][1]) )

        #locations cost
        thisExp.addData('Loc_Bus_cost', ( xcoord2, locations[0][1]) )
        thisExp.addData('Loc_Metro_cost', ( xcoord3, locations[0][1]) )
        thisExp.addData('Loc_RH_cost', ( xcoord4, locations[0][1]) )

        #locations travel
        thisExp.addData('Loc_Bus_travel', ( xcoord2, locations[1][1]) )
        thisExp.addData('Loc_Metro_travel', ( xcoord3, locations[1][1]) )
        thisExp.addData('Loc_RH_travel', ( xcoord4, locations[1][1]) )

        #locations comfort
        thisExp.addData('Loc_Bus_comfort', ( xcoord2, locations[2][1]) )
        thisExp.addData('Loc_Metro_comfort', ( xcoord3, locations[2][1]) )
        thisExp.addData('Loc_RH_comfort', ( xcoord4, locations[2][1]) )

        #locations CO2
        thisExp.addData('Loc_Bus_CO2', ( xcoord2, locations[3][1]) )
        thisExp.addData('Loc_Metro_CO2', ( xcoord3, locations[3][1]) )
        thisExp.addData('Loc_RH_CO2', ( xcoord4, locations[3][1]) )

        #locations colors, and colors
        thisExp.addData('Color_1', colors[0] )
        thisExp.addData('Loc_Color_1', (0, locations[0][1]) )
        thisExp.addData('Color_2', colors[1] )
        thisExp.addData('Loc_Color_2', (0, locations[1][1]) )
        thisExp.addData('Color_3', colors[2] )
        thisExp.addData('Loc_Color_3', (0, locations[2][1]) )
        thisExp.addData('Color_4', colors[3] )
        thisExp.addData('Loc_Color_4', (0, locations[3][1]) )

        #empezar condición para sgte trial
        if (phase == 2) and (nLoop % 5 == 0):
            while locations == shuffle(locations):
                print(locations)
        nLoop+=1
    RegionOfInterestComponent ET_Bus_Label
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = (xcoord2, ycoord1)
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_Metro_Label
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = (xcoord3, ycoord1)
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_RH_Label
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = (xcoord4, ycoord1)
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_None_Label
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every frame] = (1.5, 1.5)
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_Cost_Label
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = (locations[0][0], locations[0][1])
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_Time_Label
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = (locations[1][0], locations[1][1])
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_Comfort_Label
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = (locations[2][0], locations[2][1])
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_CO2_Label
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = (locations[3][0], locations[3][1])
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_Bus_Cost
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = (xcoord2, locations[0][1])
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_Metro_Cost
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = ( xcoord3, locations[0][1])
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_RH_Cost
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = (xcoord4, locations[0][1])
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_Bus_Time
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = (xcoord2, locations[1][1])
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_Metro_Time
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = ( xcoord3, locations[1][1])
      save = every look
      shape = rectangle
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_RH_Time
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = (xcoord4, locations[1][1])
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_Bus_Comfort
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = (xcoord2, locations[2][1])
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_Metro_Comfort
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = ( xcoord3, locations[2][1])
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_RH_Comfort
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = (xcoord4, locations[2][1])
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_Bus_CO2
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = (xcoord2, locations[3][1])
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_Metro_CO2
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = ( xcoord3, locations[3][1])
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_RH_CO2
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = (xcoord4, locations[3][1])
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    EyetrackerRecordComponent etRecord
      actionType = Start Only
      startEstim = 0
      startVal [time (s)] = 0
      syncScreenRefresh = False
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  Routine End
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    TextboxComponent Msg
      bold = False
      borderColor = white
      color = Gray
      editable = False
      fillColor = white
      letterHeight = 0.05
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Thanks for participating!
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        bkgcolor=[0,0,0.2]
        win.setColor(bkgcolor)
  Routine Intro
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    TextComponent Intro_
      letterHeight = 0.05
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      text = You have to make a trip to your place of work. You'll have to choose between three ways of getting there, or not take any of them. Each has different characteristics, which are shown below their names. Choose the alternative that suits you better, just as you would in real life.
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    TextComponent Attributes_
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        'The Attributes are:
        Cost: How much does it cost (in USD).
        Time: The length of the travel (in minutes).
        Comfort: How comfort the travel will be (0 to 5 stars).
        Pollution (trees): How many trees does it need to compensate the CO2 Emissions. The more trees are needed, the more contaminating it is.',
    TextComponent ButtonIntro_
      letterHeight = 0.05
      pos = (0, 0 )
      startVal [time (s)] = 0.0
      text = To start, press the button down below.
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    ImageComponent StartButton
      image = Images_Attention/StartButton.png
      pos = (0, -0.3)
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      clickable = StartButton
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        clicked_things1=[]
        clickables1 = [StartButton]
        waiting1=False
      Each Frame:
        clickedNum = 0
        for clickable in clickables1:
            if mouse.isPressedIn(clickable):
                clicked_things1.append(clickable.name)
        for clickable in clickables1:
            if clickable.name in clicked_things1:
                clickedNum += 1
            if clickedNum == 1 and not waiting1:
                waiting1 = True

        if clickedNum == 1 and waiting1:
            continueRoutine = False
  Routine Blank2
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    TextComponent Starting_title
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Starting in...
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    TextComponent One_title
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 1
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    TextComponent Two_title
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent Three_title
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = 3
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Flow
  Routine Intro
  Routine Blank2
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = $useRows
    conditionsFile = DataCHP.csv
    loopType = sequential
    nReps = 0
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    conditions:
      [OrderedDict([('Bus_cost', 3), ('Bus_travel_time', 30), ('Bus_Comfort', 1), ('Bus_CO2', 2), ('metro_cost', 12), ('metro_travel_time', 20), ('metro_Comfort', 1), ('metro_CO2', 10), ('RH_cost', 15), ('RH_travel_time', 15), ('RH_Comfort', 3), ('RH_CO2', 2)]),
      OrderedDict([('Bus_cost', 3), ('Bus_travel_time', 20), ('Bus_Comfort', 3), ('Bus_CO2', 2), ('metro_cost', 5), ('metro_travel_time', 15), ('metro_Comfort', 1), ('metro_CO2', 10), ('RH_cost', 15), ('RH_travel_time', 15), ('RH_Comfort', 5), ('RH_CO2', 10)]),
      OrderedDict([('Bus_cost', 3), ('Bus_travel_time', 20), ('Bus_Comfort', 3), ('Bus_CO2', 5), ('metro_cost', 12), ('metro_travel_time', 15), ('metro_Comfort', 3), ('metro_CO2', 2), ('RH_cost', 7), ('RH_travel_time', 10), ('RH_Comfort', 5), ('RH_CO2', 10)]),
      OrderedDict([('Bus_cost', 15), ('Bus_travel_time', 30), ('Bus_Comfort', 1), ('Bus_CO2', 5), ('metro_cost', 8), ('metro_travel_time', 10), ('metro_Comfort', 5), ('metro_CO2', 5), ('RH_cost', 20), ('RH_travel_time', 15), ('RH_Comfort', 3), ('RH_CO2', 10)]),
      OrderedDict([('Bus_cost', 3), ('Bus_travel_time', 30), ('Bus_Comfort', 3), ('Bus_CO2', 2), ('metro_cost', 5), ('metro_travel_time', 20), ('metro_Comfort', 1), ('metro_CO2', 5), ('RH_cost', 15), ('RH_travel_time', 15), ('RH_Comfort', 5), ('RH_CO2', 2)])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
    Routine trial
    Routine blank
  LoopTerminator trials
  Routine End
