PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1493, 933]
  blendMode = add
  expName = v1
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    ImageComponent fondo_eleccion
      image = fondo_eleccion.png
      pos = [0.0, 0.0]
      size = [2.0, 2.0]
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent caja_1_uber
      fillColor = -1.0000, -1.0000, -1.0000
      pos = (-0.40850694444277774, -0.3143518518505556)
      shape = rectangle
      size = [0.08854166667, 0.09259259259]
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent caja_1_metro
      fillColor = white
      pos = (0.08541666666666668, 0.33055555555555555)
      shape = triangle
      size = (0.16805555555555557, 0.1361111111111111)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent caja_1_caminata
      fillColor = white
      pos = (0.08402777777777777, 0.11805555555555555)
      shape = triangle
      size = (0.1597222222222222, 0.1111111111111111)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextboxComponent textbox_1_metro
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0.5645833333333333, 0.33194444444444443)
      size = (0.1763888888888889, 0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 9:00 am
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    TextboxComponent textbox_2_metro
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0.5673611111111111, 0.12013888888888889)
      size = (0.17083333333333334, 0.12361111111111112)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 10 min
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  Routine trial
