PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = v2
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
    CodeComponent code_1
      Code Type = Auto->JS
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      Before Experiment:
        block_number = 1

        # partimos con la task 1, la idea es ir aumentandolo
        task_number = 1

        # 1. Definir las listas de coordenadas
        x_coords = [-0.4, 0.08541666667, 0.5645833333]
        y_coords = [0.3518518519, 0.1296296296, -0.09259259259, -0.3148148148, -0.537037037, -0.7592592593]

        # 2. Crear la matriz anidada usando una lista de comprensión
        # La estructura es positions[indice_x][indice_y]
        positions = [[(x, y) for y in y_coords] for x in x_coords]


        box_size = [0.08854166667, 0.09259259259]
        double_box_size = [0.08854166667, 2*0.09259259259]


        # 3. Rescatar los atributos desde los csv #########
        import pandas as pd

        # Cargar el archivo CSV
        file_path = f'Atributos-Bloque-{block_number}.csv'
        df = pd.read_csv(file_path)

        # Establecer 'task' como el índice (la "llave" para buscar)
        df_params = df.set_index('task')
      Begin Experiment:
        # En cada rutina, rescatamos los atributos y aumentamos el task en 1

        # Rescatamos atributos caminata
        cam_light = df_params.loc[task_number, "cam_light"]
        cam_travel_time = df_params.loc[task_number, "cam_travel_time"]
        #cam_cost = df_params.loc[task_number, "cam_cost"]
        cam_dens = df_params.loc[task_number, "cam_dens"]
        cam_sec = df_params.loc[task_number, "cam_sec"]
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    ImageComponent fondo
      image = fondo_eleccion.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent cam_light
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[0][0]
      size = $box_size
      startVal [time (s)] = 0.0
      text = $cam_light
      units = norm
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    TextboxComponent cam_travel_time
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[0][1]
      size = 0.08854166667	,0.09259259259
      startVal [time (s)] = 0.0
      text = $cam_travel_time
      units = norm
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    TextboxComponent cam_cost
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[0][2]
      size = 0.08854166667	,0.09259259259
      startVal [time (s)] = 0.0
      text = -
      units = norm
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    TextboxComponent cam_dens
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[0][3]
      size = $box_size
      startVal [time (s)] = 0.0
      text = $cam_dens
      units = norm
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    TextboxComponent cam_sec
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[0][4]
      size = $double_box_size
      startVal [time (s)] = 0.0
      text = $cam_sec
      units = norm
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Flow
  Routine trial
