PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1493, 933]
  expName = v5-eye
  eyetracker = eyetracker.hw.mouse.EyeTracker
  keyboardBackend = ioHub
  mgBlink = ('MIDDLE_BUTTON',)
  mgMove = CONTINUOUS
  mgSaccade = 0.5
  runMode = 1
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Routines
  Routine trial
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    CodeComponent code_1
      Code Type = Auto->JS
      Begin Routine:
        # En cada rutina, rescatamos los atributos y aumentamos el task en 1

        # Rescatamos atributos caminata
        #cam_light = df_params.loc[task_number, "cam_light"]
        #cam_travel_time = df_params.loc[task_number, "cam_travel_time"]
        #cam_cost = df_params.loc[task_number, "cam_cost"]
        #cam_dens = df_params.loc[task_number, "cam_dens"]
        #cam_sec = df_params.loc[task_number, "cam_sec"]
    ImageComponent fondo
      image = fondo_actualizado.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent hora_inicio_viaje_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $position_time_of_day
      size = $small_box_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $hora
      units = norm
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    TextboxComponent cam_cost_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[0][0]
      size = 0.08854166667 ,0.09259259259
      startVal [time (s)] = 0.0
      text = -
      units = norm
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    TextboxComponent cam_travel_time_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[0][1]
      size = 0.08854166667 ,0.09259259259
      startVal [time (s)] = 0.0
      text [set every repeat] = $cam_travel_time
      units = norm
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    TextboxComponent cam_dens_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[0][2]
      size = $box_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $cam_dens
      units = norm
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    TextboxComponent cam_light_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[0][3]
      size = $double_box_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $cam_light
      units = norm
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    TextboxComponent cam_sec_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[0][4]
      size = $double_box_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $cam_sec
      units = norm
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    TextboxComponent metro_cost_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[1][0]
      size = $box_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $metro_cost
      units = norm
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    TextboxComponent metro_travel_time_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[1][1]
      size = $box_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $metro_travel_time
      units = norm
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    TextboxComponent metro_dens_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[1][2]
      size = $box_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $metro_dens
      units = norm
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    TextboxComponent metro_inf_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[1][3]
      size = $box_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $metro_inf
      units = norm
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    TextboxComponent metro_guards_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[1][4]
      size = $box_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $metro_guards
      units = norm
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    TextboxComponent metro_users_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[1][5]
      size = $box_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $metro_users
      units = norm
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    TextboxComponent uber_cost_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[2][0]
      size = $box_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $uber_cost
      units = norm
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    TextboxComponent uber_travel_time_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[2][1]
      size = $box_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $uber_travel_time
      units = norm
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    TextboxComponent uber_stars_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[2][2]
      size = $box_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $uber_stars
      units = norm
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    TextboxComponent uber_gender_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[2][3]
      size = $box_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $uber_driver_gender
      units = norm
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    TextboxComponent uber_travels_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[2][4]
      size = $box_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $uber_travels
      units = norm
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    TextboxComponent uber_record_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[2][5]
      size = $box_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $uber_record
      units = norm
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    RegionOfInterestComponent hora_inicio_viaje_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $position_time_of_day
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent cam_cost_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $positions[0][0]
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent cam_travel_time_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $positions[0][1]
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent cam_dens_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $positions[0][2]
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent cam_light_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $positions[0][3]
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent cam_sec_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $positions[0][4]
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent metro_cost_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $positions[1][0]
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent metro_travel_time_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $positions[1][1]
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent metro_dens_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $positions[1][2]
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent metro_inf_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $positions[1][3]
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent metro_guards_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $positions[1][4]
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent metro_users_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $positions[1][4]
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent uber_cost_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $positions[2][0]
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent uber_travel_time_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $positions[2][1]
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent uber_stars_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $positions[2][2]
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent uber_gender_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $positions[2][3]
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent uber_travels_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $positions[2][4]
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent uber_record_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $positions[2][5]
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    KeyboardComponent respuesta
      allowedKeys = 'a','b','c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wait
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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      text:
        Registrando
        Espere un segundo...
    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        block_number = 1



        # 1. Definir las listas de coordenadas
        x_coords = [-0.4, 0.08541666667, 0.5645833333]
        y_coords = [0.3518518519, 0.1296296296, -0.09259259259, -0.3148148148, -0.537037037, -0.7592592593]

        # 2. Crear la matriz anidada usando una lista de comprensión
        # La estructura es positions[indice_x][indice_y]
        positions = [[(x, y) for y in y_coords] for x in x_coords]

        position_boton_caminata = [-0.4895833333,0.8518518519]
        position_boton_metro = [-0.01041666667,0.8518518519]
        position_boton_uber = [0.4583333333,0.8518518519]

        box_size = [0.08854166667, 0.09259259259]
        double_box_size = [0.08854166667, 2*0.09259259259]
        size_boton = [0.2239583333,0.1666666667]

        # 3. Rescatar los atributos desde los csv #########
        import pandas as pd

        # Cargar el archivo CSV
        file_path = f'Atributos-Bloque-{block_number}.csv'
        df = pd.read_csv(file_path)

        # Establecer 'task' como el índice (la "llave" para buscar)
        df_params = df.set_index('task')
      Begin Experiment:
        # partimos con la task 1, la idea es ir aumentandolo
        task_number = 0

        # 1. Definir las listas de coordenadas
        x_coords = [-0.4, 0.08541666667, 0.5645833333]
        y_coords = [0.3518518519, 0.1296296296, -0.09259259259, -0.3148148148, -0.537037037, -0.7592592593]

        # 2. Crear la matriz anidada usando una lista de comprensión
        # La estructura es positions[indice_x][indice_y]
        positions = [[(x, y) for y in y_coords] for x in x_coords]

        position_boton_caminata = [-0.4895833333,0.8518518519]
        position_boton_metro = [-0.01041666667,0.8518518519]
        position_boton_uber = [0.4583333333,0.8518518519]

        position_time_of_day = [0.4791666667, 0.912962963]

        box_size = [0.09635416667, 0.09259259259]
        small_box_size = [0.1822916667, 0.05555555556]
        double_box_size = [0.08854166667, 2*0.09259259259]
        size_boton = [0.2239583333,0.1666666667]

        # 3. Rescatar los atributos desde los csv #########
        import pandas as pd

        # Cargar el archivo CSV
        file_path = f'Atributos-Bloque-{block_number}.csv'
        df = pd.read_csv(file_path)

        # Establecer 'task' como el índice (la "llave" para buscar)
        df_params = df.set_index('task')
    EyetrackerRecordComponent etRecord
      actionType = Start Only
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
      stopWithRoutine = False
      syncScreenRefresh = False
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  Routine end
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    EyetrackerRecordComponent etRecord_2
      actionType = Stop Only
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      stopWithRoutine = False
      syncScreenRefresh = False
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Flow
  LoopInitiator task loopType="TrialHandler"
    conditionsFile = Atributos-Bloque-1.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', np.int64(1)), ('task', np.int64(1)), ('hora', np.int64(9)), ('uber_cost', np.int64(2300)), ('uber_travel_time', np.int64(13)), ('uber_driver_gender', np.int64(0)), ('uber_stars', np.int64(4)), ('uber_record', np.int64(1)), ('uber_travels', np.int64(500)), ('metro_cost', np.int64(690)), ('metro_travel_time', np.int64(33)), ('metro_users', np.int64(0)), ('metro_inf', np.int64(0)), ('metro_guards', np.int64(0)), ('metro_dens', np.int64(-1)), ('cam_travel_time', np.int64(90)), ('cam_sec', np.int64(2)), ('cam_light', np.int64(1)), ('cam_dens', np.int64(1))]),
      OrderedDict([('block', np.int64(1)), ('task', np.int64(2)), ('hora', np.int64(15)), ('uber_cost', np.int64(7800)), ('uber_travel_time', np.int64(32)), ('uber_driver_gender', np.int64(0)), ('uber_stars', np.int64(5)), ('uber_record', np.int64(1)), ('uber_travels', np.int64(500)), ('metro_cost', np.int64(1030)), ('metro_travel_time', np.int64(18)), ('metro_users', np.int64(1)), ('metro_inf', np.int64(2)), ('metro_guards', np.int64(1)), ('metro_dens', np.int64(1)), ('cam_travel_time', np.int64(60)), ('cam_sec', np.int64(1)), ('cam_light', np.int64(1)), ('cam_dens', np.int64(1))]),
      OrderedDict([('block', np.int64(1)), ('task', np.int64(3)), ('hora', np.int64(21)), ('uber_cost', np.int64(5500)), ('uber_travel_time', np.int64(13)), ('uber_driver_gender', np.int64(1)), ('uber_stars', np.int64(4)), ('uber_record', np.int64(0)), ('uber_travels', np.int64(100)), ('metro_cost', np.int64(690)), ('metro_travel_time', np.int64(33)), ('metro_users', np.int64(1)), ('metro_inf', np.int64(3)), ('metro_guards', np.int64(1)), ('metro_dens', np.int64(0)), ('cam_travel_time', np.int64(60)), ('cam_sec', np.int64(3)), ('cam_light', np.int64(1)), ('cam_dens', np.int64(0))]),
      OrderedDict([('block', np.int64(1)), ('task', np.int64(4)), ('hora', np.int64(15)), ('uber_cost', np.int64(5500)), ('uber_travel_time', np.int64(13)), ('uber_driver_gender', np.int64(0)), ('uber_stars', np.int64(5)), ('uber_record', np.int64(1)), ('uber_travels', np.int64(500)), ('metro_cost', np.int64(870)), ('metro_travel_time', np.int64(33)), ('metro_users', np.int64(0)), ('metro_inf', np.int64(3)), ('metro_guards', np.int64(2)), ('metro_dens', np.int64(1)), ('cam_travel_time', np.int64(60)), ('cam_sec', np.int64(1)), ('cam_light', np.int64(0)), ('cam_dens', np.int64(-1))])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
    Routine wait
    Routine trial
  LoopTerminator task
  Routine end
