PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Show info dlg = False
  Show mouse = True
  Units = norm
  Use version = 2025.1.1
  Window size (pixels) = [1920, 1080]
  expName = v7
  eyetracker = eyetracker.hw.tobii.EyeTracker
  keyboardBackend = ioHub
  runMode = 1
  rush = True
  tbSampleRate = 60
  tbSamplingRate = 60
  tbTrackEyes = BINOCULAR
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Routines
  Routine trial
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    CodeComponent code_1
      Code Type = Auto->JS
      Begin Routine:
        # En cada rutina, rescatamos los atributos y aumentamos el task en 1

        # Rescatamos atributos caminata
        #cam_light = df_params.loc[task_number, "cam_light"]
        #cam_travel_time = df_params.loc[task_number, "cam_travel_time"]
        #cam_cost = df_params.loc[task_number, "cam_cost"]
        #cam_dens = df_params.loc[task_number, "cam_dens"]
        #cam_sec = df_params.loc[task_number, "cam_sec"]
    ImageComponent fondo
      image = fondo_actualizado.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent hora_inicio_viaje_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $position_time_box
      size = $time_box_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $hora
      units = norm
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    TextboxComponent metro_cost_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[1][0]
      size = $box_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $metro_cost
      units = norm
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    TextboxComponent metro_travel_time_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[1][1]
      size = $box_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $metro_travel_time
      units = norm
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    TextboxComponent metro_users_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.04
      lineSpacing = 1
      pos = $positions[1][2]
      size = $box_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $metro_users
      units = norm
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    TextboxComponent metro_camaras_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[1][3]
      size = $box_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $metro_camaras
      units = norm
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    TextboxComponent metro_guardias_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[1][4]
      size = $box_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $metro_guardias
      units = norm
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    TextboxComponent metro_tech_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[1][5]
      size = $box_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $metro_tech
      units = norm
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    TextboxComponent uber_cost_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[0][0]
      size = $box_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $uber_cost
      units = norm
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    TextboxComponent uber_travel_time_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[0][1]
      size = $box_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $uber_travel_time
      units = norm
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    TextboxComponent uber_driver_gender_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[0][2]
      size = $box_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $uber_driver_gender
      units = norm
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    TextboxComponent uber_record_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[0][3]
      size = $box_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $uber_record
      units = norm
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    TextboxComponent uber_stars_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[0][4]
      size = $box_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $uber_stars
      units = norm
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    TextboxComponent uber_travels_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      lineSpacing = 1
      pos = $positions[0][5]
      size = $box_size
      startVal [time (s)] = 0.0
      text [set every repeat] = $uber_travels
      units = norm
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    RegionOfInterestComponent hora_inicio_viaje_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $position_time_box
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent metro_cost_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $positions[1][0]
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent metro_travel_time_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $positions[1][1]
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent metro_users_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $positions[1][2]
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent metro_camaras_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $positions[1][3]
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent metro_guardias_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $positions[1][4]
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent metro_tech_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $positions[1][5]
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent uber_cost_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $positions[0][0]
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent uber_travel_time_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $positions[0][1]
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent uber_driver_gender_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $positions[0][2]
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent uber_record_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $positions[0][3]
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent uber_stars_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $positions[0][4]
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    RegionOfInterestComponent uber_travels_roi
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = $positions[0][5]
      save = every look
      shape = rectangle
      size = $box_size
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    KeyboardComponent respuesta
      allowedKeys = 'a','b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    EyetrackerRecordComponent etRecord
      actionType = Start Only
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
      stopWithRoutine = False
      syncScreenRefresh = False
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  Routine wait
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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      text:
        Registrando
        Espere un segundo...
    CodeComponent code
      Code Type = Py
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      Before Experiment:
        block_number = 1



        # x_coords representa las columnas (2 datos)
        x_coords = [
            -0.3135416667,
            0.5625
        ]

        # y_coords representa las filas (6 datos)
        y_coords = [
            0.537037037,
            0.3148148148,
            0.09259259259,
            -0.1296296296,
            -0.3518518519,
            -0.5740740741
        ]

        # 2. Crear la matriz anidada usando la lista de comprensión que indicaste
        # La estructura resultante es: una lista de 2 listas (columnas),
        # donde cada lista interna contiene 6 tuplas (x, y).
        positions = [[(x, y) for y in y_coords] for x in x_coords]

        position_time_box = [0.65625,-0.8944444444]

        box_size = [0.2776041667,0.1101851852]
        time_box_size = [0.234375,0.06018518519]


        # 3. Rescatar los atributos desde los csv #########
        import pandas as pd

        # Cargar el archivo CSV
        file_path = f'Atributos-Bloque-{block_number}.csv'
        df = pd.read_csv(file_path)

        # Establecer 'task' como el índice (la "llave" para buscar)
        df_params = df.set_index('task')
      Begin Experiment:
        block_number = 1



        # x_coords representa las columnas (2 datos)
        x_coords = [
            -0.3135416667,
            0.5625
        ]

        # y_coords representa las filas (6 datos)
        y_coords = [
            0.537037037,
            0.3148148148,
            0.09259259259,
            -0.1296296296,
            -0.3518518519,
            -0.5740740741
        ]

        # 2. Crear la matriz anidada usando la lista de comprensión que indicaste
        # La estructura resultante es: una lista de 2 listas (columnas),
        # donde cada lista interna contiene 6 tuplas (x, y).
        positions = [[(x, y) for y in y_coords] for x in x_coords]

        position_time_box = [0.65625,-0.8944444444]

        box_size = [0.2776041667,0.1101851852]
        time_box_size = [0.234375,0.06018518519]


        # 3. Rescatar los atributos desde los csv #########
        import pandas as pd

        # Cargar el archivo CSV
        file_path = f'Atributos-Bloque-{block_number}.csv'
        df = pd.read_csv(file_path)

        # Establecer 'task' como el índice (la "llave" para buscar)
        df_params = df.set_index('task')
  Routine end
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    EyetrackerRecordComponent etRecord_2
      actionType = Stop Only
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      stopWithRoutine = False
      syncScreenRefresh = False
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Flow
  LoopInitiator task loopType="TrialHandler"
    conditionsFile = Atributos-Bloque-1.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', np.int64(1)), ('task', np.int64(1)), ('hora', np.int64(9)), ('uber_cost', np.int64(2300)), ('uber_travel_time', np.int64(13)), ('uber_driver_gender', np.int64(0)), ('uber_stars', np.int64(4)), ('uber_record', np.int64(1)), ('uber_travels', np.int64(500)), ('metro_cost', np.int64(690)), ('metro_travel_time', np.int64(33)), ('metro_users', np.int64(0)), ('metro_inf', np.int64(0)), ('metro_guards', np.int64(0)), ('metro_dens', np.int64(-1)), ('cam_travel_time', np.int64(90)), ('cam_sec', np.int64(2)), ('cam_light', np.int64(1)), ('cam_dens', np.int64(1))]),
      OrderedDict([('block', np.int64(1)), ('task', np.int64(2)), ('hora', np.int64(15)), ('uber_cost', np.int64(7800)), ('uber_travel_time', np.int64(32)), ('uber_driver_gender', np.int64(0)), ('uber_stars', np.int64(5)), ('uber_record', np.int64(1)), ('uber_travels', np.int64(500)), ('metro_cost', np.int64(1030)), ('metro_travel_time', np.int64(18)), ('metro_users', np.int64(1)), ('metro_inf', np.int64(2)), ('metro_guards', np.int64(1)), ('metro_dens', np.int64(1)), ('cam_travel_time', np.int64(60)), ('cam_sec', np.int64(1)), ('cam_light', np.int64(1)), ('cam_dens', np.int64(1))]),
      OrderedDict([('block', np.int64(1)), ('task', np.int64(3)), ('hora', np.int64(21)), ('uber_cost', np.int64(5500)), ('uber_travel_time', np.int64(13)), ('uber_driver_gender', np.int64(1)), ('uber_stars', np.int64(4)), ('uber_record', np.int64(0)), ('uber_travels', np.int64(100)), ('metro_cost', np.int64(690)), ('metro_travel_time', np.int64(33)), ('metro_users', np.int64(1)), ('metro_inf', np.int64(3)), ('metro_guards', np.int64(1)), ('metro_dens', np.int64(0)), ('cam_travel_time', np.int64(60)), ('cam_sec', np.int64(3)), ('cam_light', np.int64(1)), ('cam_dens', np.int64(0))]),
      OrderedDict([('block', np.int64(1)), ('task', np.int64(4)), ('hora', np.int64(15)), ('uber_cost', np.int64(5500)), ('uber_travel_time', np.int64(13)), ('uber_driver_gender', np.int64(0)), ('uber_stars', np.int64(5)), ('uber_record', np.int64(1)), ('uber_travels', np.int64(500)), ('metro_cost', np.int64(870)), ('metro_travel_time', np.int64(33)), ('metro_users', np.int64(0)), ('metro_inf', np.int64(3)), ('metro_guards', np.int64(2)), ('metro_dens', np.int64(1)), ('cam_travel_time', np.int64(60)), ('cam_sec', np.int64(1)), ('cam_light', np.int64(0)), ('cam_dens', np.int64(-1))])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
    Routine wait
    Routine trial
  LoopTerminator task
  Routine end
